PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sonority
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Routines
  Routine instr
    TextComponent instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome and thank you for participating!

        Instructions will go here
    KeyboardComponent instrResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trainquestions1
    SoundComponent stimulitest1
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent correct
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos,0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    ImageComponent incorrect
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos,0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    KeyboardComponent train1TestAnswer
      allowedKeys = 'f','j'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 5.0
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  Routine train1
    SoundComponent stimulitrain1
      sound [set every repeat] = $audio
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent imagetrain1
      image [set every repeat] = $imageLoc
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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  Routine instr2
    TextComponent notice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Next part will automaticall start in 3 minutes.

        In this next segment, you will be presented with 27 words presented in 3 blocks of
        9.
  Routine train2
    SoundComponent stimulitrain2
      sound [set every repeat] = $audio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent imagetrain2
      image [set every repeat] = $imageLoc
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine trainquestions2
    SoundComponent stimulitest2
      sound [set every repeat] = $audioTrue
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 5.0
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    ImageComponent correct2
      image [set every repeat] = $imageTrue
      pos [set every repeat] = $(truePos, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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    ImageComponent incorrect2
      image [set every repeat] = $imageFalse
      pos [set every repeat] = $(falsePos, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
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  Routine currentBlock
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $condFiles
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  Routine testInstr
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You are now entering the test portion of the experiment.
        Select the pronunciation that sounds most correct to you.
  Routine test
    SoundComponent audioCorrect
      sound [set every repeat] = $correctAudio
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    SoundComponent audioIncorrect
      sound [set every repeat] = $incorrectAudio
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 2.0
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    ImageComponent image
      image [set every repeat] = $imageLoc
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 10
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Flow
  Routine instr
  LoopInitiator train1blocks loopType="TrialHandler"
    conditionsFile = autoConditions\train1LoopCondition.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condFiles', 'autoConditions/train1Block1.xlsx'), ('testFiles', 'autoConditions/train1Block1Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block2.xlsx'), ('testFiles', 'autoConditions/train1Block2Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block3.xlsx'), ('testFiles', 'autoConditions/train1Block3Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block4.xlsx'), ('testFiles', 'autoConditions/train1Block4Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block5.xlsx'), ('testFiles', 'autoConditions/train1Block5Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block6.xlsx'), ('testFiles', 'autoConditions/train1Block6Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block7.xlsx'), ('testFiles', 'autoConditions/train1Block7Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block8.xlsx'), ('testFiles', 'autoConditions/train1Block8Test.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train1Block9.xlsx'), ('testFiles', 'autoConditions/train1Block9Test.xlsx')])]
    LoopInitiator blockwords1 loopType="TrialHandler"
      conditionsFile = $condFiles
      loopType = sequential
      nReps = 1
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      Routine train1
    LoopTerminator blockwords1
    LoopInitiator blocktest1 loopType="TrialHandler"
      conditionsFile = $testFiles
      loopType = sequential
      nReps = 1
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      Routine trainquestions1
    LoopTerminator blocktest1
  LoopTerminator train1blocks
  Routine instr2
  LoopInitiator train2blocks loopType="TrialHandler"
    conditionsFile = autoConditions\train2LoopCondition.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condFiles', 'autoConditions/train2Block1.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train2Block2.xlsx')]),
      OrderedDict([('condFiles', 'autoConditions/train2Block3.xlsx')])]
    LoopInitiator blockloop2 loopType="TrialHandler"
      conditionsFile = $condFiles
      loopType = sequential
      nReps = 1
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      Routine train2
    LoopTerminator blockloop2
    LoopInitiator blocktest2 loopType="TrialHandler"
      conditionsFile = $testFiles
      loopType = sequential
      nReps = 1
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      Routine trainquestions2
    LoopTerminator blocktest2
  LoopTerminator train2blocks
  Routine testInstr
  LoopInitiator testLoop loopType="TrialHandler"
    conditionsFile = autoConditions\testConditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('correctAudio', 'trainingaudio/01_kitipi1.wav'), ('incorrectAudio', 'trainingaudio/01_kitipi3.wav'), ('imageLoc', 'pngimages/01_gift.png')]),
      OrderedDict([('correctAudio', 'trainingaudio/02_pitito3.wav'), ('incorrectAudio', 'trainingaudio/02_pitito2.wav'), ('imageLoc', 'pngimages/02_pallet.png')]),
      OrderedDict([('correctAudio', 'trainingaudio/03_kikita3.wav'), ('incorrectAudio', 'trainingaudio/03_kikita1.wav'), ('imageLoc', 'pngimages/03_box.png')]),
      OrderedDict([('correctAudio', 'trainingaudio/04_kitoti2.wav'), ('incorrectAudio', 'trainingaudio/04_kitoti3.wav'), ('imageLoc', 'pngimages/04_ladder.png')]),
      OrderedDict([('correctAudio', 'trainingaudio/05_titopo2.wav'), ('incorrectAudio', 'trainingaudio/05_titopo3.wav'), ('imageLoc', 'pngimages/05_megaphone.png')]),
      OrderedDict([('correctAudio', 'trainingaudio/06_titoka3.wav'), ('incorrectAudio', 'trainingaudio/06_titoka1.wav'), ('imageLoc', 'pngimages/06_tent.png')]),
      OrderedDict([('correctAudio', 'trainingaudio/07_pitapi2.wav'), ('incorrectAudio', 'trainingaudio/07_pitapi3.wav'), ('imageLoc', 'pngimages/07_suitcase.png')]),
      OrderedDict([('correctAudio', 'trainingaudio/08_tipako2.wav'), ('incorrectAudio', 'trainingaudio/08_tipako3.wav'), ('imageLoc', 'pngimages/08_bell.png')]),
      OrderedDict([('correctAudio', 'trainingaudio/09_tipata2.wav'), ('incorrectAudio', 'trainingaudio/09_tipata3.wav'), ('imageLoc', 'pngimages/09_plane.png')])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
    Routine test
  LoopTerminator testLoop
